begintemplate pyramidaldeepcell

// public variables
public is_art, gid, randi, Vrest
public init, topol, basic_shape, subsets, geom, biophys
public pre_list, connect_pre

public soma, apical, basal
public all, basal_list, apical_list, soma_list, proximal_apical, proximal_basal
public x, y, z, position, myroot

public pvbasketcell_list, deepcell_list, supercell_list, stimcell_list
public eccell_list, ca3cell_list, ivycell_list

// strings
strdef myroot

// objects
objref syn, pre_list, templist, rootlist

//external variables
external numCellTypes, cellType

// create the sections[segments]
NumSoma=1
NumApical=65
NumBasal=60
create soma[NumSoma], basal[NumBasal], apical[NumApical]


// set the initialization code, which is run whenever a new object
// of this class is instantiated
proc init() {
	gid = $1
	randi = $2
	Vrest = -86 // -65 // $3 resting membrane potential in mV
	// cell sections: soma, dendrites, axon
	append_sections() // append all sections to the section list
	connect_sections()// connect soma, dendrites, axon
	size_sections0()	// set the size dimensions of each section
	size_sections1()	// set the size dimensions of each section
	size_sections2()	// set the size dimensions of each section
	size_sections3()	// set the size dimensions of each section
	size_sections4()	// set the size dimensions of each section
	size_sections5()	// set the size dimensions of each section
	size_sections6()	// set the size dimensions of each section
	size_sections7()	// set the size dimensions of each section
	size_sections8()	// set the size dimensions of each section
	size_sections9()	// set the size dimensions of each section
	size_sections10()	// set the size dimensions of each section
	size_sections11()	// set the size dimensions of each section
	size_sections12()	// set the size dimensions of each section
	
	// subcellular mechanisms: channels, pumps, transporters
	mechinit()
	insert_mechs() // also contains set_biophys()
	
	set_nseg()		// set the number of segments in each section
					// if this is driven by an error-minimization rule,
					// make sure to do it after setting the morphology
					// and inserting the mechanisms, as it depends on those
	get_root()
	
	pre_list = new List() // define a list for the presynaptic connections
	define_synapses()
}



objref all, soma_list, basal_list, apical_list, proximal, proximal_apical, proximal_basal
objref pvbasketcell_list, ca3cell_list, eccell_list, deepcell_list, ivycell_list, supercell_list, stimcell_list
proc append_sections() { local i
	NumSoma=1
	NumApical=65
	NumBasal=60
	
  objref all, soma_list, basal_list, apical_list, proximal, proximal_apical, proximal_basal
	objref pvbasketcell_list, ca3cell_list, eccell_list, deepcell_list, ivycell_list, supercell_list, stimcell_list
  all = new SectionList()
    soma[0] all.append()
    for i=0, NumBasal-1 basal[i] all.append()
    for i=0, NumApical-1 apical[i] all.append()

  soma_list = new SectionList()
    soma[0] soma_list.append()

  basal_list = new SectionList()
    for i=0, NumBasal-1 basal[i] basal_list.append()

  apical_list = new SectionList()
    for i=0, NumApical-1 apical[i] apical_list.append()

  proximal = new SectionList()
	soma[0] proximal.append()
    for i=0, 3 basal[i] proximal.append()
	basal[6] proximal.append()
	basal[8] proximal.append()
    for i=13, 17 basal[i] proximal.append()
    for i=19, 29 basal[i] proximal.append()
    for i=31, 49 basal[i] proximal.append()
    for i=52, 57 basal[i] proximal.append()
    for i=0, 5 apical[i] proximal.append()
    for i=7, 11 apical[i] proximal.append()
    
    deepcell_list = new SectionList()
    supercell_list = new SectionList()
    stimcell_list = new SectionList()
	forsec soma_list {
		stimcell_list.append()
	}
    forsec basal_list {
		deepcell_list.append()
		supercell_list.append()
    }

  proximal_basal = new SectionList()
     for i=0, 3 basal[i] proximal_basal.append()
	basal[6] proximal_basal.append()
	basal[8] proximal_basal.append()
    for i=13, 17 basal[i] proximal_basal.append()
    for i=19, 29 basal[i] proximal_basal.append()
    for i=31, 49 basal[i] proximal_basal.append()
    for i=52, 57 basal[i] proximal_basal.append()
    
  proximal_apical = new SectionList()
    for i=0, 5 apical[i] proximal_apical.append()
    for i=7, 11 apical[i] proximal_apical.append()
    
   
  pvbasketcell_list   = new SectionList()
  
	// numbas=0
	// forsec proximal_basal { numbas=numbas+1}
	
	// numap=0
	// forsec proximal_apical { numap=numap+1}
 	
	// numsoma=0
	// forsec soma_list { numsoma=numsoma+1}
	// print "DEEP numbas=", numbas, ", numap=", numap, ", numsoma=", numsoma
	// DEEP numbas=47 , numap=11 , numsoma=1 
	for zz=1,1 { // 47 ~ 7*7
		forsec proximal_basal { pvbasketcell_list.append()} // 7
	}
	for zz=1,4 { // 44 ~ 7*6
		forsec proximal_apical { pvbasketcell_list.append()} // 6
	}
	
	for zz=1,7 { // 7 ~ 7*1
		forsec soma_list { pvbasketcell_list.append()} // 1
	}
	
  ca3cell_list   = new SectionList()
	forsec basal_list { ca3cell_list.append()}
	forsec apical_list { ca3cell_list.append()}
	
  ivycell_list   = new SectionList()
	forsec basal_list { ivycell_list.append()}
	forsec apical_list { ivycell_list.append()}
	
  eccell_list   = new SectionList()
	forsec apical_list { eccell_list.append()}
	

}

proc connect_sections() { local i
  for i = 1, 4 connect basal[i](0), basal[i-1](1)
  connect basal[5](0), basal[3](1)
  connect basal[6](0), basal[2](1)
  for i = 7, 8 connect basal[i](0), basal[6](1)
  for i = 9, 10 connect basal[i](0), basal[8](1)
  for i = 11, 12 connect basal[i](0), basal[10](1)
  connect basal[13](0), basal[1](1)
  for i = 14, 15 connect basal[i](0), basal[i-1](1)
  connect basal[16](0), basal[14](1)
  for i = 17, 18 connect basal[i](0), basal[16](1)
  connect basal[19](0), basal[13](1)
  connect basal[20](0), basal(1)
  for i = 21, 22 connect basal[i](0), basal[i-1](1)
  connect basal[23](0), basal[21](1)
  connect basal[24](0), basal[20](1)
  for i = 25, 26 connect basal[i](0), basal[24](1)
  connect basal[27](0), basal[20](1)
  for i = 28, 29 connect basal[i](0), basal[i-1](1)
  connect basal[30](0), basal[28](1)
  connect basal[31](0), basal[27](1)
  for i = 32, 33 connect basal[i](0), basal[31](1)
  for i = 35, 36 connect basal[i](0), basal[i-1](1)
  connect basal[37](0), basal[35](1)
  for i = 38, 39 connect basal[i](0), basal[37](1)
  for i = 42, 43 connect basal[i](0), basal[41](1)
  for i = 44, 45 connect basal[i](0), basal[43](1)
  connect basal[46](0), basal[41](1)
  for i = 47, 48 connect basal[i](0), basal[i-1](1)
  connect basal[49](0), basal[47](1)
  for i = 50, 51 connect basal[i](0), basal[49](1)
  connect basal[52](0), basal[46](1)
  connect basal[53](0), basal[41](1)
  for i = 54, 55 connect basal[i](0), basal[i-1](1)
  connect basal[56](0), basal[54](1)
  connect basal[57](0), basal[53](1)
  for i = 58, 59 connect basal[i](0), basal[57](1)
  for i = 1, 2 connect apical[i](0), apical(1)
  for i = 3, 4 connect apical[i](0), apical[2](1)
  for i = 5, 7 connect apical[i](0), apical[4](1)
  for i = 8, 9 connect apical[i](0), apical[i-1](1)
  connect apical[10](0), apical[8](1)
  connect apical[11](0), apical[7](1)
  for i = 12, 13 connect apical[i](0), apical[11](1)
  for i = 14, 15 connect apical[i](0), apical[i-1](1)
  connect apical[16](0), apical[14](1)
  connect apical[17](0), apical[13](1)
  for i = 18, 19 connect apical[i](0), apical[17](1)
  for i = 20, 21 connect apical[i](0), apical[19](1)
  for i = 22, 23 connect apical[i](0), apical[i-1](1)
  connect apical[24](0), apical[22](1)
  connect apical[25](0), apical[21](1)
  for i = 26, 27 connect apical[i](0), apical[25](1)
  for i = 28, 29 connect apical[i](0), apical[27](1)
  for i = 30, 31 connect apical[i](0), apical[i-1](1)
  connect apical[32](0), apical[30](1)
  connect apical[33](0), apical[29](1)
  for i = 34, 35 connect apical[i](0), apical[33](1)
  for i = 36, 37 connect apical[i](0), apical[35](1)
  for i = 38, 39 connect apical[i](0), apical[37](1)
  for i = 40, 41 connect apical[i](0), apical[39](1)
  for i = 42, 43 connect apical[i](0), apical[41](1)
  for i = 44, 45 connect apical[i](0), apical[i-1](1)
  connect apical[46](0), apical[44](1)
  connect apical[47](0), apical[43](1)
  for i = 48, 49 connect apical[i](0), apical[47](1)
  for i = 50, 51 connect apical[i](0), apical[49](1)
  for i = 52, 53 connect apical[i](0), apical[i-1](1)
  connect apical[54](0), apical[52](1)
  for i = 55, 56 connect apical[i](0), apical[i-1](1)
  connect apical[57](0), apical[55](1)
  connect apical[58](0), apical[54](1)
  connect apical[59](0), apical[51](1)
  for i = 60, 61 connect apical[i](0), apical[i-1](1)
  for i = 62, 63 connect apical[i](0), apical[60](1)
  connect apical[64](0), apical[59](1)
  connect basal(0), soma[0](0.5)
  connect basal[34](0), soma[0](0.5)
  for i = 40, 41 connect basal[i](0), soma[0](0.5)
  connect apical(0), soma[0](0.5)
}

proc size_sections0() {
	soma[0] {pt3dclear()
		pt3dadd(0, 0, 0, 22.9854)
		pt3dadd(5.74635, 0, 0, 22.9854)
		pt3dadd(11.4927, 0, 0, 22.9854)
	}
	basal[0] {pt3dclear()
		pt3dadd(-4.14, 7.21, 2.4, 1.16)
		pt3dadd(-2.34, 7.01, 2.4, 1.16)
		pt3dadd(-0.41, 7.14, 2.4, 1.16)
		pt3dadd(1.52, 7.27, 2.4, 1.16)
		pt3dadd(3.96, 7.01, 2.4, 1.16)
	}
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	}
}

proc size_sections1() {
	basal[10] {pt3dclear()
		pt3dadd(88.35, -3.97, 0.25, 0.9)
		pt3dadd(90.54, -3.71, 0.25, 0.9)
		pt3dadd(94.78, -4.48, 0.75, 0.9)
		pt3dadd(96.33, -4.35, 1.7, 0.9)
		pt3dadd(98, -4.74, 1.7, 0.9)
		pt3dadd(98.64, -4.74, 1.7, 0.9)
		pt3dadd(99.42, -3.84, 1.7, 0.9)
	}
	basal[11] {pt3dclear()
		pt3dadd(99.42, -3.84, 1.7, 0.9)
		pt3dadd(99.8, -3.2, 1.7, 0.9)
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	}
}

proc size_sections2() {
	basal[20] {pt3dclear()
		pt3dadd(3.96, 7.01, 2.4, 1.16)
		pt3dadd(6.15, 9.44, 2.4, 1.16)
		pt3dadd(7.7, 11.1, 2.4, 1.16)
		pt3dadd(8.21, 12.5, 1.45, 1.16)
	}
	basal[21] {pt3dclear()
		pt3dadd(8.21, 12.5, 1.45, 0.9)
		pt3dadd(7.72, 14.01, 1.6, 0.9)
		pt3dadd(8.62, 16.43, 2.1, 0.9)
		pt3dadd(10.29, 18.35, 3.1, 0.9)
		pt3dadd(10.94, 19.62, 1.6, 0.9)
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	}
}

proc size_sections3() {
	basal[30] {pt3dclear()
		pt3dadd(29.1, 15.04, 2.6, 0.9)
		pt3dadd(30.11, 14.85, 3.1, 0.9)
		pt3dadd(31.91, 13.58, 3.6, 0.9)
		pt3dadd(35.26, 12.81, 4.55, 0.9)
		pt3dadd(40.02, 10.38, 5.6, 0.9)
		pt3dadd(43.11, 9.23, 6.6, 0.9)
		pt3dadd(45.3, 8.6, 5.1, 0.9)
		pt3dadd(47.48, 7.83, 5.1, 0.9)
		pt3dadd(50.31, 7.19, 6.6, 0.9)
		pt3dadd(53.28, 6.69, 7.1, 0.9)
		pt3dadd(57.66, 5.92, 8.1, 0.9)
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	}
}

proc size_sections4() {
	basal[40] {pt3dclear()
		pt3dadd(-19.61, 3.95, -4.05, 0.9)
		pt3dadd(-21.54, 4.46, -4.05, 0.9)
		pt3dadd(-23.21, 4.85, -4.55, 0.9)
		pt3dadd(-26.56, 4.85, -4.55, 0.9)
		pt3dadd(-27.71, 5.23, -4.55, 0.9)
		pt3dadd(-30.03, 5.48, -4.55, 0.9)
		pt3dadd(-32.73, 4.59, -5.1, 0.9)
		pt3dadd(-34.92, 3.44, -5.6, 0.9)
		pt3dadd(-36.85, 2.55, -6.1, 0.9)
		pt3dadd(-39.17, 2.29, -5.1, 0.9)
		pt3dadd(-41.23, 2.55, -4.1, 0.9)
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	}
}

proc size_sections5() {
	basal[50] {pt3dclear()
		pt3dadd(17.13, -57.88, 13.45, 0.9)
		pt3dadd(17.6, -60.46, 13.65, 0.9)
		pt3dadd(18.5, -62.63, 14.1, 0.9)
		pt3dadd(20.56, -67.22, 14.6, 0.9)
		pt3dadd(21.07, -69.52, 14.1, 0.9)
		pt3dadd(22.1, -72.97, 13.65, 0.9)
		pt3dadd(22.1, -76.42, 12.65, 0.9)
		pt3dadd(21.71, -80.38, 12.65, 0.9)
		pt3dadd(20.94, -82.67, 12.15, 0.9)
		pt3dadd(20.17, -85.48, 12.15, 0.9)
		pt3dadd(20.68, -86.63, 13.1, 0.9)
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	}
}

proc size_sections6() {
	apical[0] {pt3dclear()
		pt3dadd(-22.14, 10.85, 3.15, 3.09)
		pt3dadd(-23.16, 11.49, 2.65, 3.09)
		pt3dadd(-25.35, 12.39, 2.65, 2.96)
		pt3dadd(-27.67, 13.92, 2.65, 2.83)
		pt3dadd(-30.37, 15.45, 1.15, 2.7)
		pt3dadd(-33.07, 16.73, 1.15, 2.57)
		pt3dadd(-35.52, 18.13, 1.15, 2.45)
		pt3dadd(-37.19, 19.41, 1.15, 2.19)
		pt3dadd(-38.22, 20.3, 0.65, 2.19)
		pt3dadd(-40.02, 21.96, 1.15, 2.19)
	}
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	}
}

proc size_sections7() {
	apical[10] {pt3dclear()
		pt3dadd(-55.49, 42.07, 2.3, 0.9)
		pt3dadd(-55.5, 42.7, 0.8, 0.9)
		pt3dadd(-56.27, 45.13, -0.15, 0.9)
		pt3dadd(-56.4, 45.89, -1.2, 0.9)
		pt3dadd(-56.01, 47.55, -1.2, 0.9)
		pt3dadd(-53.31, 48.58, -1.7, 0.9)
		pt3dadd(-51.38, 48.7, -2.15, 0.9)
		pt3dadd(-49.45, 48.7, -2.7, 0.9)
		pt3dadd(-47.13, 48.19, -2.7, 0.9)
		pt3dadd(-45.72, 47.94, -2.7, 0.9)
		pt3dadd(-45.59, 48.45, -2.7, 0.9)
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	}
}

proc size_sections8() {
	apical[20] {pt3dclear()
		pt3dadd(-138.41, 93.08, 5.65, 0.9)
		pt3dadd(-139.97, 96.14, 5.8, 0.9)
		pt3dadd(-140.61, 98.69, 6.3, 0.9)
		pt3dadd(-141.77, 100.22, 6.8, 0.9)
		pt3dadd(-143.31, 102.78, 6.8, 0.9)
		pt3dadd(-144.34, 105.2, 5.8, 0.9)
		pt3dadd(-144.99, 107.12, 5.3, 0.9)
		pt3dadd(-145.12, 108.52, 6.3, 0.9)
		pt3dadd(-144.99, 110.18, 6.3, 0.9)
		pt3dadd(-144.22, 111.59, 7.3, 0.9)
		pt3dadd(-144.6, 113.89, 7.8, 0.9)
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	}
}

proc size_sections9() {
	apical[30] {pt3dclear()
		pt3dadd(-162.39, 106.05, 5.65, 0.9)
		pt3dadd(-163.34, 108.5, 5.75, 0.9)
	}
	apical[31] {pt3dclear()
		pt3dadd(-163.34, 108.5, 5.75, 0.9)
		pt3dadd(-162.55, 110.32, 5.9, 0.9)
		pt3dadd(-162.29, 111.09, 6.9, 0.9)
		pt3dadd(-162.55, 112.62, 7.9, 0.9)
		pt3dadd(-164.22, 113, 8.4, 0.9)
		pt3dadd(-166.8, 112.49, 9.4, 0.9)
		pt3dadd(-168.47, 112.24, 9.4, 0.9)
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	}
}

proc size_sections10() {
	apical[40] {pt3dclear()
		pt3dadd(-226.15, 134.26, 9.65, 0.9)
		pt3dadd(-228.61, 132.21, 9.8, 0.9)
		pt3dadd(-230.41, 130.94, 11.3, 0.9)
		pt3dadd(-231.44, 130.04, 10.3, 0.9)
		pt3dadd(-233.63, 129.79, 9.3, 0.9)
		pt3dadd(-234.92, 130.17, 8.35, 0.9)
		pt3dadd(-237.36, 129.91, 8.35, 0.9)
		pt3dadd(-239.29, 129.28, 7.85, 0.9)
		pt3dadd(-240.06, 128.64, 7.85, 0.9)
		pt3dadd(-240.84, 128.13, 7.85, 0.9)
		pt3dadd(-242.89, 127.74, 7.3, 0.9)
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	}
}

proc size_sections11() {
	apical[50] {pt3dclear()
		pt3dadd(-378.45, 226.59, 6.65, 1.03)
		pt3dadd(-381.06, 226.41, 6.8, 1.03)
		pt3dadd(-382.22, 226.15, 6.8, 1.03)
		pt3dadd(-383.63, 225.38, 5.8, 1.03)
		pt3dadd(-384.66, 224.36, 6.3, 1.03)
		pt3dadd(-385.69, 223.09, 7.3, 1.03)
		pt3dadd(-385.69, 221.43, 7.8, 1.03)
		pt3dadd(-385.05, 219.64, 8.8, 1.03)
		pt3dadd(-384.79, 218.74, 8.8, 1.03)
		pt3dadd(-384.92, 217.21, 8.8, 1.03)
		pt3dadd(-386.46, 215.04, 9.3, 1.03)
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	}
}

proc size_sections12() {
	apical[60] {pt3dclear()
		pt3dadd(-394.33, 240.49, 9.15, 0.9)
		pt3dadd(-395.82, 242.29, 9.3, 0.9)
		pt3dadd(-396.72, 243.19, 9.3, 0.9)
		pt3dadd(-398.01, 243.7, 9.3, 0.9)
		pt3dadd(-400.33, 244.72, 8.8, 0.9)
		pt3dadd(-401.61, 245.74, 9.3, 0.9)
		pt3dadd(-402.64, 246.51, 9.3, 0.9)
	}
	apical[61] {pt3dclear()
		pt3dadd(-402.64, 246.51, 9.3, 0.77)
		pt3dadd(-402.59, 248.54, 9.95, 0.77)
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	}
} // r finished at 12


external lambda_f
proc set_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
objref myclamp
proc mechinit() {

	soma[0] myclamp = new IClamp(0.5)
	
	myclamp.amp=0.0185
	myclamp.del=0
	myclamp.dur=999999
	
	// Temperature of simulation
	celsius = 34.0  

	// Membrane resistance in ohm*cm2
	RmDend = 35000*.69 //*.75 // 35000
	RmSoma = 35000*.69 //*.75 // 35000

	// Membrane capacitance in uF/cm2
	CmSoma= 1
	CmDend = 1

	// Axial resistance in ohm*cm
	RaDend= 295 
	RaSoma= 295

	// reversal potentials in mV
	ekval = -104 //-90
	enaval = 55
	eHCNval = -30
	ecaval = 130
	eleakval = ekval //Vrest  // not lower than ekval
	
	// Calcium concentrations in mM
	ca_outside = 2
	ca_inside = 50.e-6 

	// max ion channel conductances in mho/cm2
	gNav     = 0.09*1.5*2.5 // 0.11 // Voltage gated sodium
	gKdr     = 0.1*3*.3 // Delayed rectifier potassium
	gKdrslow = 0.005 // Slow delayed rectifier potassium
	gKvAdist = 0.012*.9 // Distal A-type potassium
	gKvAprox = 0.012*.9 // Proximal A-type potassium
	gHCN     = 0.00002*1.9 // HCN (hyperpolarization-activated cyclic nucleotide-gated channel)
	gCavT    = 0.05/1 // T-type calcium
	gCavL    = 0.01/2*1.5*1.5 // 0.01/5 // L-type calcium
	gKvCaB	 = 0.02*1.5 // Big potassium channel: voltage and calcium gated 
	gKCaS	 = 0.07 // Small potassium channel: calcium gated
}
proc insert_mechs() {
	NumSoma=1
	NumApical=65
	NumBasal=60
	
	access soma[0]
	distance() // calculates the distance between location 0 of the currently accessed section (as the origin) to a second point (but with this usage, it just sets the origin point) 

	for i=0,NumSoma-1 soma[i] {   
		insert ch_HCNp gmax_ch_HCNp=gHCN
		vhalfl_ch_HCNp=-82
		insert ch_Navp  gmax_ch_Navp=gNav     
		ar2_ch_Navp=1
		insert ch_Kdrp gmax_ch_Kdrp=gKdr
		insert ch_Kdrslow gmax_ch_Kdrslow=gKdrslow
		insert ch_KvAproxp gmax_ch_KvAproxp = gKvAprox
		insert ch_KvCaB
		gmax_ch_KvCaB = gKvCaB
		insert ch_KCaS
		gmax_ch_KCaS = gKCaS
		insert pas e_pas=eleakval g_pas = 1/RmSoma Ra=RaSoma cm=CmSoma
		insert ch_CavLZ
		gmax_ch_CavLZ=gCavL
		insert iconc_CaZ		
		cao_iconc_Ca = ca_outside
		cao=ca_outside
		cai=ca_inside
		eca=ecaval
	}

	for i=0,NumBasal-1 basal[i] {
		insert pas e_pas=eleakval g_pas = 1/RmDend Ra=RaDend  cm=CmDend
		insert ch_CavLZ
		gmax_ch_CavLZ=gCavL
		insert ch_CavT
		cao_iconc_Ca = ca_outside
		cao=ca_outside
		cai=ca_inside
		eca=ecaval
		insert ch_KvCaB
		gmax_ch_KvCaB = gKvCaB
		insert ch_KCaS
		gmax_ch_KCaS = gKCaS
		for (x){ xdist = distance(x)
			if (xdist>500) {xdist=500}
				gmax_ch_CavT=gCavT*(1-exp(-xdist/500)^2)/.66
			}
		if (diam>0.5 && distance(0.5)<500) {
			insert ch_Kdrp 
			gmax_ch_Kdrp=gKdr
		insert ch_Kdrslow gmax_ch_Kdrslow=gKdrslow
			insert ch_KvAproxp
			insert ch_KvAdistp
			gmax_ch_KvAproxp=0
			gmax_ch_KvAdistp=0

			for (x){ xdist = distance(x)
				if (xdist>500) {xdist=500}
				if (xdist > 100){
					gmax_ch_KvAdistp(x) = gKvAdist*(1+xdist/200)
				} else {
					gmax_ch_KvAproxp(x) = gKvAprox*(1+xdist/200)
				}
			}
		}
	}

	for i=0,NumApical-1 apical[i] {
		insert pas e_pas=eleakval g_pas = 1/RmDend Ra=RaDend  cm=CmDend
		insert ch_CavLZ
		gmax_ch_CavLZ=gCavL
		insert ch_CavT
		cao_iconc_Ca = ca_outside
		cao=ca_outside
		cai=ca_inside
		eca=ecaval
		insert ch_KvCaB
		gmax_ch_KvCaB = gKvCaB
		insert ch_KCaS
		gmax_ch_KCaS = gKCaS
		for (x){ xdist = distance(x)
			if (xdist>500) {xdist=500}
				gmax_ch_CavT=gCavT*(1-exp(-xdist/500)^2)/.66
			}
		if (diam>0.5 && distance(0.5)<500) {
			insert ch_HCNp gmax_ch_HCNp = gHCN
			insert ch_Kdrp 
			gmax_ch_Kdrp=gKdr
			insert ch_Kdrslow gmax_ch_Kdrslow=gKdrslow
			insert ch_KvAproxp
			insert ch_KvAdistp
			gmax_ch_KvAproxp=0
			gmax_ch_KvAdistp=0

			for (x){ xdist = distance(x)
				if (xdist>500) {xdist=500}
				gmax_ch_HCNp(x) = gHCN*(1+1.5*xdist/100)
				if (xdist > 100){
					vhalfl_ch_HCNp=-90
					gmax_ch_KvAdistp(x) = gKvAdist*(1+xdist/100)
				} else {
					vhalfl_ch_HCNp=-82
					gmax_ch_KvAproxp(x) = gKvAprox*(1+xdist/100)
				}
			}
		}
	}

	forall {
        v=Vrest
        if (ismembrane("ch_Navaxonp") || ismembrane("ch_Navp") || ismembrane("ch_Nav")) {ena=enaval}
        if (ismembrane("ch_Kdrp") || ismembrane("ch_KvAproxp") || ismembrane("ch_KvAdistp")) {ek=ekval}
        if (ismembrane("ch_HCNp") ) {e_ch_HCNp=eHCNval}
	}
}


func is_art() { return 0 }

proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma[0] $o2 = new NetCon (&v(1), $o1)
			$o2.threshold = -10
}

proc position(){ local i
	forall {
		for i = 0, n3d()-1 {
			pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
		}
	}
	x = $1  y = $2  z = $3	
}

proc get_root() {local i localobj sref
	rootlist = new SectionList()
	rootlist.allroots()
	i=0
	forsec all {
		sref = new SectionRef()
		if (sref.has_parent==0) {
			myroot = secname()
			i=i+1
		}
	}
	if (i>1) {
		print "WARNING: cell ", gid, " has ", i, " root sections!"
	}
}

objref syn
proc define_synapses() {local i localobj f2, f3

}

endtemplate pyramidaldeepcell
